OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "Channel 2; Channel 3"
  Channel List = Channel 2; Channel 3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Time based epoching
  Epoch duration (in sec) = 5
  Epoch intervals (in sec) = 0.25
-> SSVEP Classifier
  Clock frequency (Hz) = 100
  Script = C:/Users/fabra/Desktop/SSVEP Response Analysis/OpenViBE/script/OpenViBE-Classifier-TIME.py
  Number of targets = 2
  Frequencies = 16;18
  Sampling rate = 250
  Window time = 5
