OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

CSV File Reader => #0
  Filename = C:/Users/fabra/Desktop/Nuova cartella/RESTING/RESTING_OPENVIBE_1.csv
#0.Output stream -> Temporal filter "Notch 50 Hz"
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 49.75
  High Cut-off Frequency (Hz) = 50.25
-> Temporal filter "1-40 Hz BPF" => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 30
-> Time based epoching
  Epoch duration (in sec) = 3
  Epoch intervals (in sec) = 0.1
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/fabra/Desktop/SSVEP Response Analysis/OpenViBE/script/OpenViBE-Classifier-TIME.py
  Sampling Rate = 250
  Epoch duration = 3
  Target Frequencies = 16,18
  Frequency tolerance = 0.5
  CommMaster IP = 127.0.0.1
  CommMaster Port = 5680
Data=#2 -> Signal display "Filtered"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0.Output stream -> Signal display "Raw"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
